PsychoPy2experiment version="2022.2.5"
Settings
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = Facial expression recognition task 
  keyboardBackend = ioHub
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Routines
  Routine intro
    TextComponent text_instr
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        Dear participant,
        in this test you will see some clips of actors expressing six emotions (fear, anger, surprise, sadness, happiness and disgust).
        Some of these expressions are subtle. Your task is to guess which emotions they are expressing.

        Answer using the numbers 1-6. During the test, you will be able to see which number corresponds to which emotion.

        PRESS THE SPACE BAR TO BEGIN
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Trial1
    MovieComponent movie
      backend = ffpyplayer
      forceEndRoutine = False
      movie [set every repeat] = $face_images
      pos = (0, 0.15)
      size = (0.5,0.5)
      startVal [time (s)] = 0.5
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    TextComponent text
      letterHeight = 0.05
      pos = [0, -0.25]
      startVal [time (s)] = 0.0
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      text:
        1: Anger       2: Disgust       3: Fear
        4: Happiness   5: Sadness       6: Surprise
    KeyboardComponent key_resp_2
      allowedKeys = '1', '2', '3', '4', '5', '6'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    StaticComponent ISI
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
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  Routine thank_you
    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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      text:
        The test is finished.

        Thank you for your participation!
  Routine routine_1
Flow
  Routine intro
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = facial stimuli.csv
    loopType = fullRandom
    nReps = 1
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    conditions:
      [OrderedDict([('face_image', 'F01-NE-AN.mp4'), ('face_images', 'Stimuli/F01-NE-AN.mp4')]),
      OrderedDict([('face_image', 'F02-NE-DI.mp4'), ('face_images', 'Stimuli/F02-NE-DI.mp4')]),
      OrderedDict([('face_image', 'F03-NE-FE.mp4'), ('face_images', 'Stimuli/F03-NE-FE.mp4')]),
      OrderedDict([('face_image', 'F05-NE-HA.mp4'), ('face_images', 'Stimuli/F05-NE-HA.mp4')]),
      OrderedDict([('face_image', 'F07-NE-SA.mp4'), ('face_images', 'Stimuli/F07-NE-SA.mp4')]),
      OrderedDict([('face_image', 'F09-NE-SU.mp4'), ('face_images', 'Stimuli/F09-NE-SU.mp4')]),
      OrderedDict([('face_image', 'F11-NE-AN.mp4'), ('face_images', 'Stimuli/F11-NE-AN.mp4')]),
      OrderedDict([('face_image', 'F13-NE-DI.mp4'), ('face_images', 'Stimuli/F13-NE-DI.mp4')]),
      OrderedDict([('face_image', 'F14-NE-FE.mp4'), ('face_images', 'Stimuli/F14-NE-FE.mp4')]),
      OrderedDict([('face_image', 'F16-NE-HA.mp4'), ('face_images', 'Stimuli/F16-NE-HA.mp4')]),
      OrderedDict([('face_image', 'F19-NE-SA.mp4'), ('face_images', 'Stimuli/F19-NE-SA.mp4')]),
      OrderedDict([('face_image', 'F20-NE-SU.mp4'), ('face_images', 'Stimuli/F20-NE-SU.mp4')]),
      OrderedDict([('face_image', 'F22-NE-AN.mp4'), ('face_images', 'Stimuli/F22-NE-AN.mp4')]),
      OrderedDict([('face_image', 'F26-NE-DI.mp4'), ('face_images', 'Stimuli/F26-NE-DI.mp4')]),
      OrderedDict([('face_image', 'F29-NE-FE.mp4'), ('face_images', 'Stimuli/F29-NE-FE.mp4')]),
      OrderedDict([('face_image', 'F30-NE-HA.mp4'), ('face_images', 'Stimuli/F30-NE-HA.mp4')]),
      OrderedDict([('face_image', 'F31-NE-SA.mp4'), ('face_images', 'Stimuli/F31-NE-SA.mp4')])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
    Routine Trial1
    Routine routine_1
  LoopTerminator trials_2
  Routine thank_you
